<?xml version='1.0' encoding='UTF-8'?>
<model name="COVID_model" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="main">
        <!--/////////////// Variables /////////////////-->
        <variable name="t" public_interface="in" units="day"/>
        <!-- Susceptible-->
        <variable initial_value="1.0" name="S" public_interface="out" units="dimensionless"/>
        <!-- Exposed-->
        <variable initial_value="0" name="E" public_interface="out" units="dimensionless"/>
        <!-- Pre-Symptomatic-->
        <variable initial_value="0" name="I_p" public_interface="out" units="dimensionless"/>
        <!-- Infectious, untested-->
        <variable initial_value="0" name="I_u" public_interface="out" units="dimensionless"/>
        <!-- Infectious, tested-->
        <variable initial_value="0" name="I_c" public_interface="out" units="dimensionless"/>
        <!-- Infectious, total-->
        <variable name="I" public_interface="out" units="dimensionless"/>
        <!-- Recovered, untested-->
        <variable initial_value="0" name="R_u" public_interface="out" units="dimensionless"/>
        <!-- Recovered, tested-->
        <variable initial_value="0" name="R_c" public_interface="out" units="dimensionless"/>
        <!-- Recovered, total-->
        <variable name="R" public_interface="out" units="dimensionless"/>
        <!-- Deaths-->
        <variable name="D" public_interface="out" units="dimensionless"/>
        <!-- Infection Fatality Rate-->
        <variable name="IFR" public_interface="out" units="dimensionless"/>
        <!-- Transmission Coefficient-->
        <variable name="beta" public_interface="out" units="per_day"/>
        <!--/////////////// Parameters /////////////////
 Population Size-->
        <variable name="N" public_interface="in" units="dimensionless"/>
        <!-- Infection Fatality Rate (when ICU is under max capacity)-->
        <variable name="IFR_0" public_interface="in" units="dimensionless"/>
        <!-- Infection Fatality Rate (for infectious exceeding ICU capacity)-->
        <variable name="IFR_1" public_interface="in" units="dimensionless"/>
        <!-- Relative Infectiousness in Pre-Symptomatic Period-->
        <variable name="epsilon" public_interface="in" units="dimensionless"/>
        <!-- E->P Transition Rate-->
        <variable name="alpha" public_interface="in" units="per_day"/>
        <!-- P->I Transition Rate-->
        <variable name="delta" public_interface="in" units="per_day"/>
        <!-- I->R Transition Rate-->
        <variable name="gamma" public_interface="in" units="per_day"/>
        <!-- Testing Rate for Symptomatic Infections-->
        <variable name="c" public_interface="in" units="per_day"/>
        <!-- Estimated ICU Maximum Capacity-->
        <variable name="n_ICU" public_interface="in" units="dimensionless"/>
        <!-- Proportion of Total Infections Requiring ICU-->
        <variable name="p_ICU" public_interface="in" units="dimensionless"/>
        <!-- Basic Reproduction Number-->
        <variable name="R_0" public_interface="in" units="dimensionless"/>
        <!--/////////////// System of ODEs /////////////////-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>S</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>beta</ci>
                    </apply>
                    <ci>S</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>epsilon</ci>
                            <ci>I_p</ci>
                        </apply>
                        <ci>I_u</ci>
                        <ci>I_c</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>E</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>beta</ci>
                        <ci>S</ci>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>epsilon</ci>
                                <ci>I_p</ci>
                            </apply>
                            <ci>I_u</ci>
                            <ci>I_c</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>alpha</ci>
                        <ci>E</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>I_p</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha</ci>
                        <ci>E</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>delta</ci>
                        <ci>I_p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>I_u</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>delta</ci>
                        <ci>I_p</ci>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <ci>gamma</ci>
                            <ci>c</ci>
                        </apply>
                        <ci>I_u</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>I_c</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>c</ci>
                        <ci>I_u</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>gamma</ci>
                        <ci>I_c</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>R_u</ci>
                </apply>
                <apply>
                    <times/>
                    <ci>gamma</ci>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <ci>IFR</ci>
                    </apply>
                    <ci>I_u</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>R_c</ci>
                </apply>
                <apply>
                    <times/>
                    <ci>gamma</ci>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <ci>IFR</ci>
                    </apply>
                    <ci>I_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>D</ci>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <minus/>
                                        <apply>
                                            <minus/>
                                            <cn cellml:units="dimensionless">1</cn>
                                            <ci>S</ci>
                                        </apply>
                                        <ci>E</ci>
                                    </apply>
                                    <ci>I_p</ci>
                                </apply>
                                <ci>I_u</ci>
                            </apply>
                            <ci>I_c</ci>
                        </apply>
                        <ci>R_u</ci>
                    </apply>
                    <ci>R_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I</ci>
                <apply>
                    <plus/>
                    <ci>I_c</ci>
                    <ci>I_u</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R</ci>
                <apply>
                    <plus/>
                    <ci>R_c</ci>
                    <ci>R_u</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>beta</ci>
                <apply>
                    <divide/>
                    <ci>R_0</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <divide/>
                            <ci>epsilon</ci>
                            <ci>delta</ci>
                        </apply>
                        <apply>
                            <divide/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>gamma</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>IFR</ci>
                <piecewise>
                    <piece>
                        <ci>IFR_0</ci>
                        <apply>
                            <leq/>
                            <apply>
                                <times/>
                                <ci>N</ci>
                                <ci>I</ci>
                                <ci>p_ICU</ci>
                            </apply>
                            <ci>n_ICU</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <apply>
                            <minus/>
                            <ci>IFR_1</ci>
                            <apply>
                                <times/>
                                <apply>
                                    <divide/>
                                    <ci>n_ICU</ci>
                                    <apply>
                                        <times/>
                                        <ci>N</ci>
                                        <ci>I</ci>
                                        <ci>p_ICU</ci>
                                    </apply>
                                </apply>
                                <apply>
                                    <minus/>
                                    <ci>IFR_1</ci>
                                    <ci>IFR_0</ci>
                                </apply>
                            </apply>
                        </apply>
                    </otherwise>
                </piecewise>
            </apply>
        </math>
    </component>
</model>
